// @File (style = "open") Time_series
// @File (style = "directory") Folder_results
// @int BG_rolling_ball_radius

// This program finds ROIs based on one channel fluorescence signal.
//
// Usage:
// * Run in FIJI (www.fiji.sc)
//
// Author: Jens Loncke, KU Leuven, jens.loncke@kuleuven.be
// June 2023

// Clear everything and open files
run("Clear Results");
roiManager("reset");
open(Time_series);

measurement_title = getTitle();

File.makeDirectory(Folder_results+"/ROIs/");
File.makeDirectory(Folder_results+"/Multi_measure/");
 
// Subtract background
window_titles = getList("image.titles");
for ( i = 0; i < window_titles.length; i++ ) {
	selectWindow(window_titles[i]);
	run("Subtract Background...", "rolling=BG_rolling_ball_radius stack");
}

// Find ROIs
selectWindow(measurement_title);
setSlice(nSlices());
run("Duplicate...", "use");
setOption("ScaleConversions", true);
run("8-bit");
run("Gaussian Blur...", "sigma=2");
setAutoThreshold("Otsu dark");
setOption("BlackBackground", true);
run("Convert to Mask");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=50-Infinity add");


// Let user do quality control of ROIs
setTool("freehand");
waitForUser("Please adapt ROIs if necessary. When finished press OK.");

// Measure results
roiManager("deselect");
roiManager("Save", Folder_results+"/ROIs/"+measurement_title+".zip");
run("Set Measurements...", "mean display redirect=None decimal=3");
selectWindow(measurement_title);
roiManager("multi measure")
saveAs("Results", Folder_results+"/Multi_measure/"+measurement_title+".csv");
roiManager("reset");
close("*");
selectWindow("Results"); 
run("Close");
